CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:10
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<treat>(nab|nedu|ctrl|tf1|tf2))(_)(?P<exp>[0-9])(_s)(?P<scene>[0-9]|[0-9][0-9])(?P<Channel>(c0|c1|c2))
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{'DNA': 'treat', 'EdU': 'treat', 'MCM2': 'treat'}, {'DNA': 'exp', 'EdU': 'exp', 'MCM2': 'exp'}, {'DNA': 'scene', 'EdU': 'scene', 'MCM2': 'scene'}]
    Image set matching method:Metadata
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "c2")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "c0")
    Name to assign these images:EdU
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "c1")
    Name to assign these images:MCM2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):50,300
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:40
    Suppress local maxima that are closer than this minimum allowed distance:20
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.6
    Lower and upper bounds on threshold:0.008,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
MeasureObjectIntensity:[module_num:6|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
    Select images to measure:DNA, EdU, MCM2
    Select objects to measure:Nuclei

MeasureObjectSizeShape:[module_num:7|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
    Select object sets to measure:Nuclei
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

OverlayOutlines:[module_num:8|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DNA
    Name the output image:DNAOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:Nuclei

ExportToSpreadsheet:[module_num:9|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Desktop\\Research\\Research Project\\Cancer projects\\25-ImagingExperiments\\1-BT549\\BT5-siTFEB-MCM2-EdU\\Analysis
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Nuclei|Intensity_MeanIntensity_EdU,Nuclei|Intensity_MeanIntensity_DNA,Nuclei|Intensity_MeanIntensity_MCM2,Nuclei|Intensity_IntegratedIntensity_MCM2,Nuclei|Intensity_IntegratedIntensity_DNA,Nuclei|Intensity_IntegratedIntensity_EdU,Nuclei|AreaShape_Eccentricity,Nuclei|AreaShape_Area,Nuclei|AreaShape_FormFactor,Nuclei|AreaShape_MajorAxisLength,Nuclei|AreaShape_Solidity,Nuclei|Number_Object_Number,Image|Count_Nuclei,Image|Metadata_scene
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:BT5_siTF_MCM2_EDU_
    Overwrite existing files without warning?:No
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
SaveImages:[module_num:10|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
    Select the type of image to save:Image
    Select the image to save:DNAOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_outlines
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Desktop\\Research\\Research Project\\Cancer projects\\25-ImagingExperiments\\1-BT549\\BT5-siTFEB-MCM2-EdU\\Analysis\\Outlines
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
